% iKs: slow, noninactivating potassium current (also called M-current) after Yamada et al. 1989, from Gutfreund et al. 1995.
% Tags: M-current, potassium, channel, intrinsic
%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%
% Parameters
gKs=.084; E_Ks=-80;
halfKs = -35; temp = 34; % 22; %
IC=0; ICnoise=0
tau_div = 3^((temp-22)/10)
taumult = 1
Ks_offset = 0

% Functions
ninf(X)=1./(1+exp(-(X-(halfKs+Ks_offset))/10))
tauKs(X)=taumult*1000./(3.3*tau_div*(exp((X-(halfKs+Ks_offset))/40)+exp(-(X-(halfKs+Ks_offset))/20)))
IKs(X,n)=gKs.*n.*(X-E_Ks)

% ODEs
n'=(ninf(X)-n)/tauKs(X)
n(0)=IC+ICnoise.*rand(Npop,1)

% Interface
@current += -IKs(X,n)